PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = first_sbtg
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Routines
  Routine debrief
  Routine Welcome
    PolygonComponent colour_background
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        Dear Participant,

        welcome to our experiement!

        Please have a seat and go over the instructions on the following page.

        Press any key to continue
    KeyboardComponent keyWelcome
      correctAns = $correctResponse
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine sbRound
    TextComponent textSb
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = 'This round you are playing with ' + $playerId + '!'
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    ImageComponent image
      image [set every repeat] = $avatarFile
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine buffer500
    PolygonComponent colour_background_2
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent fixCross
      fillColor = $[1,1,1]
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine bufferRoutine
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = buffering
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.5
      text = buffering .
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = .5
      text = buffering . .
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.5
      text = buffering . . .
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  Routine buffering
  Routine instructions
    TextComponent textInstr
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine bufferStart
Flow
  Routine Welcome
  Routine buffer500
  Routine instructions
  Routine buffer500
  Routine bufferStart
  LoopInitiator buffer loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine bufferRoutine
  LoopTerminator buffer
  LoopInitiator trialsSb loopType="TrialHandler"
    conditionsFile = contitions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.tiff'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
      OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.tiff'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
      OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.tiff'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
      OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.tiff'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
      OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.tiff'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
      OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.tiff'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
      OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.tiff'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
      OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.tiff'), ('actionLabel', 'defect'), ('correctResponse', 'defect')]),
      OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.tiff'), ('actionLabel', 'defect'), ('correctResponse', 'defect')]),
      OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.tiff'), ('actionLabel', 'defect'), ('correctResponse', 'defect')]),
      OrderedDict([('playerId', 'Lukas'), ('avatarFile', 'images/avatar2.tiff'), ('actionLabel', 'trust'), ('correctResponse', 'trust')])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
    Routine sbRound
    Routine buffer500
  LoopTerminator trialsSb
