PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = so_be_u_00
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Routines
  Routine sbIn
    PolygonComponent cB_6
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
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    TextComponent sBInstructions
      letterHeight = 0.03
      startVal [time (s)] = 0.2
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      text:
        You are now ready to start with the experiment.

        On the next screens you will make decisions on how to engage with other players.

        Make a choice using your 'left' or 'right' keys
    KeyboardComponent keySbInstructions
      allowedKeys = 'c'
      correctAns = $correctResponse
      forceEndRoutine = True
      startVal [time (s)] = 2
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    KeyboardComponent out_sb
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wScr
    PolygonComponent cB_1
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
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    TextComponent textWelcome
      letterHeight = 0.03
      startVal [time (s)] = 0
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      text:
        Dear Participant,

        welcome to our experiement!

        Please have a seat and go over the instructions on the following page.

        Press any key to continue
    KeyboardComponent keyWelcome
      correctAns = $correctResponse
      forceEndRoutine = True
      startVal [time (s)] = 2
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    KeyboardComponent out_0
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wSer
    PolygonComponent cB_3
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
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    TextComponent textServer
      letterHeight = 0.03
      startVal [time (s)] = 0
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      text:
        We will now connect you to the the other Players through the Server.

        This might take a minute.


        Please contact the Experimenter if your Computer is unabled to connect.

        Press 'c' to continue
    KeyboardComponent keyServer
      allowedKeys = 'c'
      correctAns = $correctResponse
      forceEndRoutine = True
      startVal [time (s)] = 2
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    KeyboardComponent out_2
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wIns
    PolygonComponent cB_2
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
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    TextComponent textInstructions
      letterHeight = 0.03
      startVal [time (s)] = 0
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      text:
        You have been assigned to condition B


        In the following task you will repeatedly interact with two other players.

        You will have to make choices on how to engage with the other players.

        Following a choice you will receive a short feedback on how the other player has acted.


        At the end of all interactions we will select one-interaction at random and pay-out the sum of money gained.

        Press the c-key on your keyboard to continue.
    KeyboardComponent keyInstructions
      allowedKeys = 'c'
      correctAns = $correctResponse
      forceEndRoutine = True
      startVal [time (s)] = 2
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    KeyboardComponent out_1
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine bufRou_2
    PolygonComponent cB_4
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent text_1
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = connecting      
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    TextComponent text_2
      letterHeight = 0.03
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.5
      text = connecting .    
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    TextComponent text_3
      letterHeight = 0.03
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = .5
      text = connecting . .  
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    TextComponent text_4
      letterHeight = 0.03
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.5
      text = connecting . . .
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  Routine bufEnd
    PolygonComponent cB_5
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent idle
      letterHeight = 0.03
      startVal [time (s)] = 0.2
      stopVal [time (s)] = 0.5
      text = found
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    TextComponent idle_2
      letterHeight = 0.03
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 0.7
      text = init proc     
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    TextComponent idle_3
      letterHeight = 0.03
      startVal [time (s)] = 0.7
      stopVal [time (s)] = 0.8
      text = init proc 2141
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    TextComponent idle_4
      letterHeight = 0.03
      startVal [time (s)] = 0.8
      stopVal [time (s)] = 0.95
      text = init proc 2215
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    TextComponent idle_5
      letterHeight = 0.03
      startVal [time (s)] = 0.95
      stopVal [time (s)] = 1.1
      text = init proc 3229
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    TextComponent idle_6
      letterHeight = 0.03
      startVal [time (s)] = 1.1
      stopVal [time (s)] = 1.25
      text = init proc 4325
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    TextComponent idle_7
      letterHeight = 0.03
      startVal [time (s)] = 1.25
      stopVal [time (s)] = 1.35
      text = init proc 1337
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    TextComponent ilde_8
      letterHeight = 0.03
      startVal [time (s)] = 1.35
      stopVal [time (s)] = 1.85
      text = buffering      
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    TextComponent idle_9
      letterHeight = 0.03
      startVal [time (s)] = 1.85
      stopVal [duration (s)] = .5
      text = buffering .    
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    TextComponent idle_10
      letterHeight = 0.03
      startVal [time (s)] = 2.35
      stopVal [duration (s)] = .5
      text = buffering . .  
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    TextComponent idle_11
      letterHeight = 0.03
      startVal [time (s)] = 2.85
      stopVal [duration (s)] = .5
      text = buffering . . .
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    TextComponent idle_12
      letterHeight = 0.03
      startVal [time (s)] = 3.35
      stopVal [time (s)] = 3.5
      text = run /serv/234_1/sd connect
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  Routine sbScr
    PolygonComponent cB_7
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine buf500
    PolygonComponent cB_9
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .500
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  Routine sbRnd
    PolygonComponent cB_8
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = 'This round you are playing with ' + $playerId + '!'
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    ImageComponent imagesbRnd
      image [set every repeat] = $avatarFile
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    RatingScaleComponent Slider
      categoryChoices = 0,1,2,3,4,5,6,7,8,9,10
      forceEndRoutine = True
      high = 10
      labels = 0,10
      low = 0
      markerStart = 5
      pos = 0, -0.4
      scaleDescription = Amount of credits to invest in other player
      size = 1.0
      startVal [time (s)] = 0.0
      storeHistory = True
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    CodeComponent getRating
      Code Type = Py
      End Routine:
        sbResp = int(Slider.getRating())
        sbRT = Slider.getRT()

        print(sbRT)
        print(sbResp)
  Routine sbEnd
    PolygonComponent cB_10
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    TextComponent sbEndText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text:
        Thank you for participating.

        This part of the experiment is now completed.
    KeyboardComponent sbEndKey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine sbFb
    CodeComponent sbFbCode
      Code Type = Py
      Begin Experiment:
        sbTotal = 0
      Begin Routine:
        #str(sbResp)

        if actionLabel == 0:
            textforThis = playerId + ' has decided not to cooperate and ' + choiceLabel + '. ''You received 0 credits'
        elif actionLabel == 1:
            textforThis = playerId + ' has decided to ' + choiceLabel + ' you receive ' + str(sbResp) + ' credits'
        else:
            textforThis = 'empty'
      End Routine:
        if actionLabel == 0:
            sbGain = 0
        elif actionLabel == 1:
            sbGain = sbResp
        else:
            pass

        sbTotal = sbTotal + sbGain
        print(sbTotal)
    PolygonComponent cbFb
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent textFb
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $textforThis
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    KeyboardComponent out_Fb
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine bufFix
    PolygonComponent cbBuf
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .9
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    PolygonComponent fixCross
      fillColor = $[1,1,1]
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = .5
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Flow
  Routine wScr
  Routine wIns
  Routine wSer
  LoopInitiator bufferLoop loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine bufRou_2
  LoopTerminator bufferLoop
  Routine bufEnd
  Routine sbIn
  LoopInitiator sbLoop loopType="TrialHandler"
    Selected rows = 1:20
    conditionsFile = contitions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
      OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
      OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
      OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
      OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
      OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
      OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
      OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'defect'), ('correctResponse', 'defect')]),
      OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'defect'), ('correctResponse', 'defect')]),
      OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'defect'), ('correctResponse', 'defect')]),
      OrderedDict([('playerId', 'Lukas'), ('avatarFile', 'images/avatar2.jpg'), ('actionLabel', 'trust'), ('correctResponse', 'trust')])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
    Routine sbRnd
    Routine buf500
    Routine sbFb
    Routine bufFix
  LoopTerminator sbLoop
  LoopInitiator sbLoop_rev loopType="TrialHandler"
    Selected rows = 21:40
    conditionsFile = contitions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
      OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
      OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
      OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
      OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
      OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
      OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
      OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'defect'), ('correctResponse', 'defect')]),
      OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'defect'), ('correctResponse', 'defect')]),
      OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'defect'), ('correctResponse', 'defect')]),
      OrderedDict([('playerId', 'Lukas'), ('avatarFile', 'images/avatar2.jpg'), ('actionLabel', 'trust'), ('correctResponse', 'trust')])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
    Routine sbRnd
    Routine buf500
    Routine sbFb
    Routine bufFix
  LoopTerminator sbLoop_rev
  Routine sbEnd
