PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = so_be_u_00
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Routines
  Routine sbIn
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        sbTotal = 0
        sbTotalPaul= 0
        sbTotalLukas =0
      Begin Routine:
        textInstructionsSb2 = 'Hi ' + textName + '!\n' + textInstructionsSb
    PolygonComponent cB_6
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
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    TextComponent sBInstructions
      letterHeight = 0.03
      startVal [time (s)] = 0.2
      text [set every repeat] = $textInstructionsSb2
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    KeyboardComponent keySbInstructions
      allowedKeys = 'c'
      correctAns = $correctResponse
      forceEndRoutine = True
      startVal [time (s)] = 2
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    KeyboardComponent out_sb
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wScr
    CodeComponent wCode
      Code Type = Py
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      Begin Experiment:
        textWelcomeText =(
        'Dear Participant, \n'
        'Welcome to our experiement! \n'
        'Please carefully go over the instructions on the following pages. \n'
        'If you have any questions please ask the experimenter for help. \n\n'
        'Press any key to continue'
        )

        textInstructionsText= (
        'You have been randomly assigned to condition B. \n\n'
        'In the following task you will repeatedly interact with two other players.You will have to make choices on how to engage with the other players.\n'
        'You will make investments and try to maximize your gains (credits).\n\n'
        'Following a choice you will receive a short feedback on how the other player has acted.\n'
        'At the end of all interactions one random interaction will be selected and payed-out the sum of credits gained.\n\n'
        'see next page for more information.\n'
        'Press c to continue.'
        )

        textInstructionsText2 = """
        The goal is to maximize your gains.\n
        Every round you will receive an endowment of 10 credits.
        You will have the choice to invest part (or all) of these credits in another player.
        The credits that you invest get triple when transfered to the other player.
        The other player can then decide what to do with that investment.
        They will then have to decide how many credits they want to send back to you (0% - 200%).

        For example:
        You decide to invest 5 credits. That money gets tripled to 15 credits.
        The other player decides to send back 150% of the investment.

        The toal for this round is 12.5 credits.
        5 credits that you did not invest, plus 7.5 from the investement that you received back.
        The other player gains 7.5 credits.

        Press c to continue.
        """

        textProfileText = """
        Please type your player-name: \n
        Importantly, this is not supposed to be your real name, just a name that other players can identify you with.
        Type a name, and press 'enter' when you are ready.
        """

        textServerText= """
        We will now connect you to the the other Players through the Server.\n
        This might take a minute.\n
        Please contact the Experimenter if your Computer is unabled to connect.\n
        Press c to continue.
        """

        textInstructionsSb = """
        You are now ready to start with the experiment. \n
        On the next screens you will make decisions on how to engage with other players.\n\n
        Make a choice using your left or right keys and confirm with enter

        Note, all decisions (yours and others) happen simultaneously, and not in response to each other.

        Press c to begin.
        """

        textSbText = 'How much do you want to invest?'

        textSbFeed1 = ' has decided to return '
        textSbFeed2 = ' percent of your investment. \n\n'
        textSbFeed3 = 'Your return is '
        textSbFeed4 = ' credits!\n\n'
        textSbFeed5 = 'Your total gain for this round is '

        textEndText = """Thank you for participating.

        This part of the experiment is now completed.
        """

        textEndText2 = 'We randomly selected one interaction. Your gain is: '
        textEndText3 = '\nPlease wait for the experimenter before continuing'

        bufText = """waiting for other player"""
    PolygonComponent cB_1
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
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    TextComponent textWelcome
      letterHeight = 0.03
      startVal [time (s)] = 0
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      text [set every repeat]:
        $textWelcomeText
    KeyboardComponent keyWelcome
      correctAns = $correctResponse
      forceEndRoutine = True
      startVal [time (s)] = 2
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    KeyboardComponent out_0
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wSer
    CodeComponent code_4
      Code Type = Py
    PolygonComponent cB_3
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
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    TextComponent textServer
      letterHeight = 0.03
      startVal [time (s)] = 0
      text [set every repeat] = $textServerText
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    KeyboardComponent keyServer
      allowedKeys = 'c'
      correctAns = $correctResponse
      forceEndRoutine = True
      startVal [time (s)] = 2
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    KeyboardComponent out_2
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wIns
    CodeComponent code_3
      Code Type = Py
    PolygonComponent cB_2
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
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    TextComponent textInstructions
      letterHeight = 0.03
      startVal [time (s)] = 0
      text [set every repeat] = $textInstructionsText
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    KeyboardComponent keyInstructions
      allowedKeys = 'c'
      correctAns = $correctResponse
      forceEndRoutine = True
      startVal [time (s)] = 2
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    KeyboardComponent out_1
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine bufRou_2
    PolygonComponent cB_4
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent text_1
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = connecting      
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    TextComponent text_2
      letterHeight = 0.03
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.5
      text = connecting .    
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    TextComponent text_3
      letterHeight = 0.03
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = .5
      text = connecting . .  
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    TextComponent text_4
      letterHeight = 0.03
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.5
      text = connecting . . .
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  Routine bufEnd
    PolygonComponent cB_5
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent idle
      letterHeight = 0.03
      startVal [time (s)] = 0.2
      stopVal [time (s)] = 0.5
      text = found
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    TextComponent idle_2
      letterHeight = 0.03
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 0.7
      text = init proc     
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    TextComponent idle_3
      letterHeight = 0.03
      startVal [time (s)] = 0.7
      stopVal [time (s)] = 0.8
      text = init proc 2141
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    TextComponent idle_4
      letterHeight = 0.03
      startVal [time (s)] = 0.8
      stopVal [time (s)] = 0.95
      text = init proc 2215
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    TextComponent idle_5
      letterHeight = 0.03
      startVal [time (s)] = 0.95
      stopVal [time (s)] = 1.1
      text = init proc 3229
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    TextComponent idle_6
      letterHeight = 0.03
      startVal [time (s)] = 1.1
      stopVal [time (s)] = 1.25
      text = init proc 4325
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    TextComponent idle_7
      letterHeight = 0.03
      startVal [time (s)] = 1.25
      stopVal [time (s)] = 1.35
      text = init proc 1337
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    TextComponent ilde_8
      letterHeight = 0.03
      startVal [time (s)] = 1.35
      stopVal [time (s)] = 1.85
      text = buffering      
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    TextComponent idle_9
      letterHeight = 0.03
      startVal [time (s)] = 1.85
      stopVal [duration (s)] = .5
      text = buffering .    
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    TextComponent idle_10
      letterHeight = 0.03
      startVal [time (s)] = 2.35
      stopVal [duration (s)] = .5
      text = buffering . .  
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    TextComponent idle_11
      letterHeight = 0.03
      startVal [time (s)] = 2.85
      stopVal [duration (s)] = .5
      text = buffering . . .
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    TextComponent idle_12
      letterHeight = 0.03
      startVal [time (s)] = 3.35
      stopVal [time (s)] = 3.5
      text = run /serv/234_1/sd connect
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  Routine sbScr
    PolygonComponent cB_7
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine sbRnd
    PolygonComponent cB_8
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = 'This round you are playing with ' + $playerId + '!'
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    ImageComponent imagesbRnd
      image [set every repeat] = $avatarFile
      pos = (0, 0.2)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    RatingScaleComponent sbChoice
      categoryChoices = 0,1,2,3,4,5,6,7,8,9,10
      forceEndRoutine = True
      high = 10
      labels = 0,10
      low = 0
      markerStart = 5
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
      storeHistory = True
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    CodeComponent getRating
      Code Type = Py
      End Routine:
        sbResp = int(sbChoice.getRating())
        sbRT = sbChoice.getRT()

        print(sbRT)
        print(sbResp)
    TextComponent text_6
      letterHeight = 0.025
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $textSbText
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  Routine sbEnd
    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        drawRound = random.choice(roundGain)
        print(drawRound)


        textEndFinal = textEndText2 + str(drawRound) + ' credits!\n' + textEndText3
    PolygonComponent cB_10
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    TextComponent sbEndText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $textEndFinal
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    KeyboardComponent sbEndKey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine sbFb
    CodeComponent sbFbCode
      Code Type = Py
      Begin Experiment:
        import random

        roundGain = []
      Begin Routine:
        ResponseCoop = [1,1.5,2]
        ResponseUnco = [0.5,0.75,1]
        creditMultiPlier = 3

        if actionLabel == 0:
            multiPlier = random.choice(ResponseUnco)
        elif actionLabel == 1:
            multiPlier = random.choice(ResponseCoop)
        else:
            multiPlier= int(99)

        creditInvestment = sbResp
        creditLeft = 10 - sbResp

        creditGain = creditInvestment * multiPlier
        creditTotal = creditGain + creditLeft
        mpText = multiPlier*100

        textforThis1 = playerId + textSbFeed1 + str(mpText) + textSbFeed2
        textforThis2 = textSbFeed3 + str(creditGain) + textSbFeed4
        textforThis3 = textSbFeed5 + str(creditTotal) + textSbFeed4
      End Routine:
        lastPlayer = playerId

        if actionLabel == 0:
            sbGain = 0
        elif actionLabel == 1:
            sbGain = sbResp
        else:
            pass

        sbTotal += sbGain

        if playerId == 'Paul':
            sbTotalPaul += sbGain
        elif playerId == 'Lukas':
            sbTotalLukas += sbGain
        else:
            pass

        roundGain.append(creditTotal)

        print(sbTotal)
        print(roundGain)

        thisExp.addData("totalMoney", sbTotal)
        thisExp.addData("paulMoney", sbTotalPaul)
        thisExp.addData("lukasMoney", sbTotalLukas)
    PolygonComponent cbFb
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent textFb
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $textforThis1 + $textforThis2 + $textforThis3
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    KeyboardComponent out_Fb
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine bufFix
    PolygonComponent cbBuf
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent text_8
      letterHeight = 0.4
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.6
      text = +
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  Routine sbFbSum
    PolygonComponent cbBuf_2
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent text_5
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text [set every repeat] = $sbSumText
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  Routine wPfl
    PolygonComponent cB
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Both
      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase)
      Begin JS Routine:
        modify = false;
        text.text = '';
      Begin Routine:
        modify = False
        text.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if 'space' in keys:
                text.text = text.text + ' '
            elif 'backspace' in keys:
                text.text = text.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    text.text = text.text + keys[0].upper()
                    modify = False
                else:
                    text.text = text.text + keys[0]
            copyText.setText(text.text)
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            text.text = text.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                text.text = text.text + textAdd.toUpperCase();
                modify = false;
            } else {
                text.text = text.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("typedWord", text.text)
        text.setText('')  // empty the onscreen text ready for next input
      End Routine:
        textName = text.text
        thisExp.addData("typedWord", text.text)
    TextComponent displayText
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $textProfileText
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    TextComponent copyText
      letterHeight = 0.05
      pos = (0, - 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent out
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wIns2
    PolygonComponent cB_12
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
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    TextComponent textInstructions_2
      letterHeight = 0.03
      startVal [time (s)] = 0
      text [set every repeat] = $textInstructionsText2
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    KeyboardComponent keyInstructions_2
      allowedKeys = 'c'
      correctAns = $correctResponse
      forceEndRoutine = True
      startVal [time (s)] = 2
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    KeyboardComponent out_3
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine bufWait
    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        import random

        timeR= [0,1,1,1,1,2,2,2,3,3,4,4,5]
        intTime= int(random.choice(timeR))
    PolygonComponent cB_9
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = intTime
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    TextComponent text_7
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = intTime
      text [set every repeat] = $bufText
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  Routine reset
    CodeComponent code_8
      Code Type = Py
      Begin Routine:
        roundGain = []
    PolygonComponent cB_13
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .01
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  Routine sbQu2
    PolygonComponent cB_14
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
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    CodeComponent code_9
      Code Type = Py
      Begin Routine:
        rating_you = visual.RatingScale(win=win, name='rating', size=1.0, pos=[0.0, -0.2],
            scale=sliderText + '?', labels = [sliderMin, sliderMax],
            tickHeight=-1,
            marker='triangle', markerStart=4, markerColor='DarkRed')
    RatingScaleComponent rating_you
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine sbQu1
    PolygonComponent cB_11
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        if lastPlayer == 'Paul':
            playerQ = 'Lukas'
            if lastPlayer == 'Lukas':
                playerQ = 'Paul'
        if lastPlayer == 'Lukas':
            playerQ = 'Paul'
            if lastPlayer == 'Paul':
                playerQ = 'Lukas'
        else:
            pass

        rating_they = visual.RatingScale(win=win, name='rating', size=1.0, pos=[0.0, -0.2],
            scale=sliderText +' ' + playerQ + '?', labels = [sliderMin, sliderMax],
            tickHeight=-1,
            marker='triangle', markerStart=4, markerColor='DarkRed')
      End Routine:
        lastPlayer = playerQ
    RatingScaleComponent rating_they
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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Flow
  Routine wScr
  Routine wIns
  Routine wIns2
  Routine wPfl
  Routine wSer
  LoopInitiator bufferLoop loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine bufRou_2
  LoopTerminator bufferLoop
  Routine bufEnd
  Routine sbIn
  LoopInitiator trials_0 loopType="TrialHandler"
    Selected rows = 0:4
    conditionsFile = contitions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('playerAn', 'PlayerA'), ('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('choiceLabel', 'reciprocate'), ('actionLabel', 1), ('actionRound', 0)]),
      OrderedDict([('playerAn', 'PlayerB'), ('playerId', 'Lukas'), ('avatarFile', 'images/avatar2.jpg'), ('choiceLabel', 'reciprocate'), ('actionLabel', 1), ('actionRound', 0)]),
      OrderedDict([('playerAn', 'PlayerA'), ('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('choiceLabel', 'reciprocate'), ('actionLabel', 1), ('actionRound', 0)]),
      OrderedDict([('playerAn', 'PlayerB'), ('playerId', 'Lukas'), ('avatarFile', 'images/avatar2.jpg'), ('choiceLabel', 'reciprocate'), ('actionLabel', 1), ('actionRound', 0)]),
      OrderedDict([('playerAn', 'PlayerA'), ('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('choiceLabel', 'reciprocate'), ('actionLabel', 1), ('actionRound', 1)]),
      OrderedDict([('playerAn', 'PlayerA'), ('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('choiceLabel', 'reciprocate'), ('actionLabel', 1), ('actionRound', 1)]),
      OrderedDict([('playerAn', 'PlayerA'), ('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('choiceLabel', 'reciprocate'), ('actionLabel', 1), ('actionRound', 1)]),
      OrderedDict([('playerAn', 'PlayerA'), ('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('choiceLabel', 'reciprocate'), ('actionLabel', 1), ('actionRound', 1)])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
    LoopInitiator sbLoop_0 loopType="TrialHandler"
      Selected rows = 0:4
      conditionsFile = contitions.xlsx
      loopType = sequential
      nReps = 2
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      conditions:
        [OrderedDict([('playerAn', 'PlayerA'), ('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('choiceLabel', 'reciprocate'), ('actionLabel', 1), ('actionRound', 1)]),
        OrderedDict([('playerAn', 'PlayerA'), ('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('choiceLabel', 'reciprocate'), ('actionLabel', 1), ('actionRound', 1)]),
        OrderedDict([('playerAn', 'PlayerA'), ('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('choiceLabel', 'reciprocate'), ('actionLabel', 1), ('actionRound', 1)]),
        OrderedDict([('playerAn', 'PlayerA'), ('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('choiceLabel', 'reciprocate'), ('actionLabel', 1), ('actionRound', 1)]),
        OrderedDict([('playerAn', 'PlayerA'), ('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('choiceLabel', 'reciprocate'), ('actionLabel', 1), ('actionRound', 1)]),
        OrderedDict([('playerAn', 'PlayerA'), ('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('choiceLabel', 'reciprocate'), ('actionLabel', 1), ('actionRound', 1)]),
        OrderedDict([('playerAn', 'PlayerA'), ('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('choiceLabel', 'reciprocate'), ('actionLabel', 1), ('actionRound', 1)]),
        OrderedDict([('playerAn', 'PlayerA'), ('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('choiceLabel', 'keep the investment'), ('actionLabel', 0), ('actionRound', 1)])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
      Routine sbRnd
      Routine bufWait
      Routine sbFb
      Routine bufFix
    LoopTerminator sbLoop_0
    LoopInitiator sliders_01 loopType="TrialHandler"
      conditionsFile = sliders_they.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('sliderID', 1), ('sliderText', 'How much do you like'), ('sliderMin', 'not at all'), ('sliderMax', 'very much'), ('sliderChoices', '1 2 3 4 5 6 7')]),
        OrderedDict([('sliderID', 2), ('sliderText', 'How much do you want to continue playing with'), ('sliderMin', 'not at all'), ('sliderMax', 'very much'), ('sliderChoices', '1 2 3 4 5 6 7')]),
        OrderedDict([('sliderID', 3), ('sliderText', 'How much do you like'), ('sliderMin', 'not at all'), ('sliderMax', 'very much'), ('sliderChoices', '1 2 3 4 5 6 7')]),
        OrderedDict([('sliderID', 4), ('sliderText', 'How much do you want to continue playing with '), ('sliderMin', 'not at all'), ('sliderMax', 'very much'), ('sliderChoices', '1 2 3 4 5 6 7')])]
      Routine sbQu1
    LoopTerminator sliders_01
    LoopInitiator slider_02 loopType="TrialHandler"
      conditionsFile = sliders_you.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('sliderID', 5), ('sliderText', 'How do you feel?'), ('sliderMin', 'negative'), ('sliderMax', 'positive'), ('sliderChoices', '1 2 3 4 5 6 7')]),
        OrderedDict([('sliderID', 6), ('sliderText', 'How activated are you right now?'), ('sliderMin', 'low'), ('sliderMax', 'high'), ('sliderChoices', '1 2 3 4 5 6 7')])]
      Routine sbQu2
    LoopTerminator slider_02
    LoopInitiator buffer_0 loopType="TrialHandler"
      loopType = random
      nReps = 4
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      Routine bufWait
    LoopTerminator buffer_0
    Routine bufFix
  LoopTerminator trials_0
  Routine reset
  LoopInitiator trials_1 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    LoopInitiator sbLoop_1 loopType="TrialHandler"
      Selected rows = 5:25
      conditionsFile = contitions.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
        OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
        OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
        OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
        OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
        OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
        OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
        OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'defect'), ('correctResponse', 'defect')]),
        OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'defect'), ('correctResponse', 'defect')]),
        OrderedDict([('playerId', 'Paul'), ('avatarFile', 'images/avatar1.jpg'), ('actionLabel', 'defect'), ('correctResponse', 'defect')]),
        OrderedDict([('playerId', 'Lukas'), ('avatarFile', 'images/avatar2.jpg'), ('actionLabel', 'trust'), ('correctResponse', 'trust')])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
      Routine sbRnd
      Routine bufWait
      Routine sbFb
      Routine bufFix
    LoopTerminator sbLoop_1
    LoopInitiator sliders_11 loopType="TrialHandler"
      conditionsFile = sliders_they.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('sliderID', 1), ('sliderText', 'How much do you like'), ('sliderMin', 'not at all'), ('sliderMax', 'very much'), ('sliderChoices', '1 2 3 4 5 6 7')]),
        OrderedDict([('sliderID', 2), ('sliderText', 'How much do you want to continue playing with'), ('sliderMin', 'not at all'), ('sliderMax', 'very much'), ('sliderChoices', '1 2 3 4 5 6 7')]),
        OrderedDict([('sliderID', 3), ('sliderText', 'How much do you like'), ('sliderMin', 'not at all'), ('sliderMax', 'very much'), ('sliderChoices', '1 2 3 4 5 6 7')]),
        OrderedDict([('sliderID', 4), ('sliderText', 'How much do you want to continue playing with '), ('sliderMin', 'not at all'), ('sliderMax', 'very much'), ('sliderChoices', '1 2 3 4 5 6 7')])]
      Routine sbQu1
    LoopTerminator sliders_11
    LoopInitiator sliders_12 loopType="TrialHandler"
      conditionsFile = sliders_you.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('sliderID', 5), ('sliderText', 'How do you feel?'), ('sliderMin', 'negative'), ('sliderMax', 'positive'), ('sliderChoices', '1 2 3 4 5 6 7')]),
        OrderedDict([('sliderID', 6), ('sliderText', 'How activated are you right now?'), ('sliderMin', 'low'), ('sliderMax', 'high'), ('sliderChoices', '1 2 3 4 5 6 7')])]
      Routine sbQu2
    LoopTerminator sliders_12
    LoopInitiator buffer_1 loopType="TrialHandler"
      loopType = random
      nReps = 4
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      Routine bufWait
    LoopTerminator buffer_1
    Routine bufFix
  LoopTerminator trials_1
  Routine sbEnd
